PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = 'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['spreadsheets/balloons.xlsx', 'spreadsheets/trialTypes.xlsx', 'assets/bang.wav', 'assets/blueBalloon.png', 'assets/greenBalloon.png', 'assets/redBalloon.png', 'assets/bang.mp3']
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[-1.0000, 0.6157, 0.6392]
  expName = bart
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    ImageComponent background_2
      image = assets/background.png
      size = (2.2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent bankButton
      allowedKeys = 'return', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent updateEarnings
      Code Type = Auto->JS
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      Begin Experiment:
        bankedEarnings=0.0
        balloonEarnings = ''
        bankedText = ''
        lastBalloonEarnings=0.0
        thisBalloonEarnings=0.0
      Begin Routine:
        thisBalloonEarnings=(pump.thisN+1)*0.05
        balloonEarnings = "This balloon value:\n£" + str(round(thisBalloonEarnings, 2))
        bankedText = "You have banked:\n£" + str(round(bankedEarnings, 2))
      End Routine:
        #calculate cash 'earned'
        if pump.thisN+1 == maxPumps:
            popped = True
        else:
            popped = False

        # if balloon popped reset the earnings
        if popped:
          thisBalloonEarnings=0.0
          lastBalloonEarnings=0.0
        else:
            lastBalloonEarnings=thisBalloonEarnings

        if 'return' in bankButton.keys:
            pump.finished = True
    TextboxComponent reminder
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (-0.4, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Press SPACE to pump the balloon
        Press RETURN to bank this sum
    TextboxComponent balloonValTxt
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (-0.4, 0.4)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $balloonEarnings
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    TextboxComponent bankedTxt
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (0.4, 0.4)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $bankedText
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    CodeComponent setBalloonSize
      Code Type = Auto->JS
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      Begin Experiment:
        balloonSize=0.08
        balloonMsgHeight=0.01
      Begin Routine:
        balloonBody.setPos([0, balloonSize/2-.5])
        balloonBody.setSize(balloonSize)
      Each Frame:
        balloonSize=0.1+(pump.thisN+1)*0.015
      End Routine:
        #save data
        trials.addData('nPumps', pump.thisN+1)
        trials.addData('size', balloonSize)
        trials.addData('earnings', thisBalloonEarnings)
        trials.addData('popped', popped)
    ImageComponent balloonBody
      image = assets/redBalloon.png
      ori = -90
      pos [set every frame] = [0, balloonSize/2-.5]
      size [set every frame] = balloonSize
      startVal [time (s)] = 0.0
      units = height
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    TextboxComponent trialcount
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (0.4, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Ballon number: ' + str(trials.thisN+1) +'/' + str(trials.nTotal)
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  Routine finalScore
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    ImageComponent background_4
      image = assets/background.png
      size = (2.2, 1)
      startVal [time (s)] = 0.0
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    CodeComponent finalScoreCode
      Code Type = JS
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      Begin JS Routine:
        scoreText="Well done! You banked a total of\n£" + bankedEarnings.toFixed(2);
    TextboxComponent scoremsg
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.04
      opacity = 0.8
      size = (1, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scoreText
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString();
        }).join("\n");

        // Send data to OSF via DataPipe
        console.log('Saving data...');

        fetch('https://pipe.jspych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                'Accept': '*/*',
            },
            body: JSON.stringify({
                experimentID: 'Z047qYErCiK6', // * UPDATE WITH YOUR DATAPIPE EXPERIMENT ID *
                filename: filename,
                data: data,
            }),
        })
        .then(response => response.json())  // Odczytaj odpowiedź jako JSON
        .then(data => {
            console.log('Data saved:', data);
            psychoJS.quit();  // Zakończ eksperyment po zapisaniu danych
        })
        .catch(error => {
            console.error('Error saving data:', error);
        });
  Routine feedback
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    ImageComponent background_3
      image = assets/background.png
      size = (2.2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent checkPopped
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackText=""
      Begin Routine:
        # track the banked earnings
        bankedEarnings = bankedEarnings+lastBalloonEarnings

        #update the text
        balloonEarnings = "This balloon value:\n£" + str(round(thisBalloonEarnings, 2))
        bankedText = "You have banked:\n£" + str(round(bankedEarnings, 2))

        pop_sound.setVolume(1)

        # play the pop sound
        if popped==True:
          feedbackText="Oops! Lost that one!"
          pop_sound.play()
        else:
          feedbackText="You banked £" + str(round(lastBalloonEarnings, 2))
    TextboxComponent feedbacktxt
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedbackText
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    TextboxComponent bankedTxt_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (0.4, 0.4)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $bankedText
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    TextboxComponent balloonValTxt_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (-0.4, 0.4)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $balloonEarnings
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    TextboxComponent reminder_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (-0.4, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        Press SPACE to pump the balloon
        Press RETURN to bank this sum
    TextboxComponent trialcount_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (0.4, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $'Ballon number: ' + str(trials.thisN+1) +'/' + str(trials.nTotal)
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  Routine instructions
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    ImageComponent background
      image = assets/background.png
      size = (2.2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextboxComponent instrtxt
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.04
      opacity = 0.8
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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      text:
        This is a game where you have to optimise your earnings in a balloon pumping competition.

        You get prize money for each balloon you pump up, according to its size. But if you pump it too far it will pop and you'll get nothing for that balloon.

        Balloons differ in their maximum size - they can occasionally reach to almost the size of the screen but most will pop well before that.

        Press
            SPACE to pump the balloon
            RETURN to bank the cash for this balloon and move onto the next
    SoundComponent pop_sound
      sound = assets/bang.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      volume = 0
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  Routine reset_balloon
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        balloonSize=0.08
        popped=False
        nPumps=0
  Routine exit_routine
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Please wait while we save your results
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    CodeComponent code_2
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString();
        }).join("\n");

        // Send data to OSF via DataPipe
        console.log('Saving data...');

        fetch('https://pipe.jspych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                'Accept': '*/*',
            },
            body: JSON.stringify({
                experimentID: 'Z047qYErCiK6', // * UPDATE WITH YOUR DATAPIPE EXPERIMENT ID *
                filename: filename,
                data: data,
            }),
        })
        .then(response => response.json())  // Odczytaj odpowiedź jako JSON
        .then(data => {
            console.log('Data saved:', data);
            psychoJS.quit();  // Zakończ eksperyment po zapisaniu danych
        })
        .catch(error => {
            console.error('Error saving data:', error);
        });
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = spreadsheets/conditions.xlsx
    loopType = random
    nReps = 1
    random seed = 1832
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    conditions:
      [{'maxPumps': 2},
      {'maxPumps': 8},
      {'maxPumps': 14},
      {'maxPumps': 20},
      {'maxPumps': 26},
      {'maxPumps': 32},
      {'maxPumps': 38},
      {'maxPumps': 44},
      {'maxPumps': 50},
      {'maxPumps': 56},
      {'maxPumps': 62},
      {'maxPumps': 68},
      {'maxPumps': 74},
      {'maxPumps': 80},
      {'maxPumps': 86},
      {'maxPumps': 92},
      {'maxPumps': 98},
      {'maxPumps': 104},
      {'maxPumps': 110},
      {'maxPumps': 116}]
    Routine reset_balloon
    LoopInitiator pump loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = maxPumps
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      Routine trial
    LoopTerminator pump
    Routine feedback
  LoopTerminator trials
  Routine finalScore
  Routine exit_routine
